PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'subject_id': u'999', u'exptype': u'categ', u'protocol_id': u'1'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['subject_id'], expName, expInfo['date'])
  expName = detectOddOne_categ
  Screen = 1
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Routines
  Routine trial
    ImageComponent image1
      pos = (-286, 286)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im1
      size = (256, 256)
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    ImageComponent image2
      pos = (0, 286)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im2
      size = (256, 256)
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    ImageComponent image3
      pos = (286, 286)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im3
      size = (256, 256)
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    ImageComponent image4
      pos = (-286, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im4
      size = (256, 256)
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    ImageComponent image5
      pos = (0, -0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im5
      size = (256, 256)
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    ImageComponent image6
      pos = (286, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im6
      size = (256, 256)
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    ImageComponent image7
      pos = (-286, -286)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im7
      size = (256, 256)
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    ImageComponent image8
      pos = (0, -286)
      units = pix
      startVal [time (s)] = 0.0
      image [set every frame] = $"stimuli/"+im8
      size = (256, 256)
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    ImageComponent image9
      pos = (286, -286)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im9
      size = (256, 256)
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = valid click
      clickable = image1,image2,image3,image4,image5,image6,image7,image8,image9
      startVal [time (s)] = 0.0
      saveMouseState = final
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  Routine welcome
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Experiment Detekce odlišné scény







        Stiskněte mezerník..
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
    TextComponent text_3
      text = Děkujeme za účast!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        V každé úloze vám ukážeme 9 obrázků. Vaším úkolem bude myší označit, který z obrázků je podle vás nejvíc vizuálně odlišný od ostatních. Jedná se celkový dojem, nejde o přítomnost lidí, zvířat či dalších objektů.


        Stiskněte mezerník..
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_protocols
      Begin Experiment:
        protocolFile="protocols/P%03d_%s.csv" % (int(expInfo['protocol_id']), expInfo['exptype'])
Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $protocolFile
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine bye
